PsychoPy2experiment version="1.83.04"
Settings
  Monitor = testMonitor
  Experiment info = {u'Gender(m/f/o)': u'', u'Age': u'', u'UIN': u''}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' % (expInfo['UIN'], expName, expInfo['date'])
  expName = stopsignaltask_key
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    DotsComponent dots
      startVal [time (s)] = 0.5
      fieldPos = (0.0, 0.0)
      speed = 0.1
      noiseDots = direction
      dotLife = 3
      refreshDots = repeat
      fieldShape = circle
      coherence [set every repeat] = coh
      nDots = 100
      stopVal [duration (s)] = 1.1
      fieldSize = 0.85
      signalDots = same
      dotSize = 2
      dir [set every repeat] = direct
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    SoundComponent sound_1
      sound = A
      volume [set every repeat] = vol
      stopVal [duration (s)] = 0.1
      startVal [time (s)] = $soa
    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 1.1
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = expcond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'soa': '=0.1+0.5', u'coh': 0.08, u'vol': 1L, u'direct': 0L, u'corrAns': u'right'},
      {u'soa': 0.7, u'coh': 0.15, u'vol': 1L, u'direct': 180L, u'corrAns': u'left'},
      {u'soa': 0.8, u'coh': 0.85, u'vol': 1L, u'direct': 0L, u'corrAns': u'right'},
      {u'soa': 0.9, u'coh': 0.08, u'vol': 1L, u'direct': 180L, u'corrAns': u'left'},
      {u'soa': 1L, u'coh': 0.15, u'vol': 1L, u'direct': 0L, u'corrAns': u'right'},
      {u'soa': 1.1, u'coh': 0.85, u'vol': 1L, u'direct': 180L, u'corrAns': u'left'},
      {u'soa': '=0.1+0.5', u'coh': 0.08, u'vol': 1L, u'direct': 0L, u'corrAns': u'right'},
      {u'soa': 0.7, u'coh': 0.15, u'vol': 1L, u'direct': 180L, u'corrAns': u'left'},
      {u'soa': 0.8, u'coh': 0.85, u'vol': 1L, u'direct': 0L, u'corrAns': u'right'},
      {u'soa': 0.9, u'coh': 0.08, u'vol': 0L, u'direct': 180L, u'corrAns': u'None'},
      {u'soa': 1L, u'coh': 0.15, u'vol': 0L, u'direct': 0L, u'corrAns': u'None'},
      {u'soa': 1.1, u'coh': 0.85, u'vol': 0L, u'direct': 180L, u'corrAns': u'None'}]
    Routine trial
  LoopTerminator trials
